PsychoPy2experiment version="1.85.1"
Settings
  Monitor = second
  color = $[-1,-1,0]
  Experiment info = {u'session': u'001', u'participant': u'test'}
  Units = use prefs
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  expName = Calib
  Screen = 2
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Routines
  Routine trial
    GratingComponent grating
      tex = sin
      color [set every repeat] = $Color
      stopVal [duration (s)] = 1
      units = norm
      startVal [time (s)] = 0
      sf = 0
      size = (2, 2)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Calib_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Color': [-1, -1, -1]},
      {'Color': [-1, -1, -0.95]},
      {'Color': [-1, -1, -0.9]},
      {'Color': [-1, -1, -0.85]},
      {'Color': [-1, -1, -0.8]},
      {'Color': [-1, -1, -0.75]},
      {'Color': [-1, -1, -0.7]},
      {'Color': [-1, -1, -0.65]},
      {'Color': [-1, -1, -0.6]},
      {'Color': [-1, -1, -0.55]},
      {'Color': [-1, -1, -0.5]},
      {'Color': [-1, -1, -0.45]},
      {'Color': [-1, -1, -0.4]},
      {'Color': [-1, -1, -0.35]},
      {'Color': [-1, -1, -0.3]},
      {'Color': [-1, -1, -0.25]},
      {'Color': [-1, -1, -0.2]},
      {'Color': [-1, -1, -0.15]},
      {'Color': [-1, -1, -0.1]},
      {'Color': [-1, -1, -0.05]},
      {'Color': [-1, -1, 0]},
      {'Color': [-1, -1, 0.05]},
      {'Color': [-1, -1, 0.1]},
      {'Color': [-1, -1, 0.15]},
      {'Color': [-1, -1, 0.2]},
      {'Color': [-1, -1, 0.25]},
      {'Color': [-1, -1, 0.3]},
      {'Color': [-1, -1, 0.35]},
      {'Color': [-1, -1, 0.4]},
      {'Color': [-1, -1, 0.45]},
      {'Color': [-1, -1, 0.5]},
      {'Color': [-1, -1, 0.55]},
      {'Color': [-1, -1, 0.6]},
      {'Color': [-1, -1, 0.65]},
      {'Color': [-1, -1, 0.7]},
      {'Color': [-1, -1, 0.75]},
      {'Color': [-1, -1, 0.8]},
      {'Color': [-1, -1, 0.85]},
      {'Color': [-1, -1, 0.9]},
      {'Color': [-1, -1, 0.95]},
      {'Color': [-1, -1, 1]}]
    Routine trial
  LoopTerminator trials
