PsychoPy2experiment version="1.85.1"
Settings
  Monitor = test2
  color = $[-1,-1,0]
  Experiment info = {u'participant': u'BMWR74', u'Run': u'Run3'}
  Units = use prefs
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  expName = Grating_Interleaved
  Screen = 2
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Routines
  Routine trial
    ParallelOutComponent TrialTrigger
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.01
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 255
    CodeComponent U3_Status
      Begin Experiment:
        # Adding status to labjack U3
        TrialTrigger.status=None
    CodeComponent tex
      Begin Experiment:
        import numpy as np
        import psychopy.filters
        grating_res = 512

        #grating = psychopy.filters.makeGrating(res=grating_res, cycles=1.0)
        # initialise a 'black' texture
        tex = np.ones((grating_res, grating_res, 3)) * -1.0
        # replace the blue channel with the grating
        #tex[..., -1] = grating
        tex[:,256:, -1] = 1
    CodeComponent TrialType
      Begin Experiment:
        #win2 = visual.Window(
        #    size=(600, 600), fullscr=False, screen=0,
        #    allowGUI=False, allowStencil=False,
        #    monitor=u'test2', color=[-1,-1,-1], colorSpace='rgb',
        #    blendMode='avg', useFBO=True, pos=[300, 300])
        #text2 = visual.TextStim(win=win2, name='text',
        #    text='',
        #    font=u'Arial',
        #    pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
        #    color=u'white', colorSpace='rgb', opacity=1,
        #    depth=-6.0);

        #text2.setAutoDraw(True)
      Begin Routine:
        if thisTrial != None:
            trial_text = ''
            for paramName in thisTrial.keys():
                exec('temp = ' + paramName)
                trial_text += u'%s = %s  \n' % (paramName, temp)
            print(trial_text)
        #text2.text = trial_text
        #win2.flip()
    GratingComponent grating
      tex = $tex
      stopVal [duration (s)] = 4
      mask = raisedCos
      pos [set every repeat] = $pos
      units = deg
      texture resolution = 512
      phase [set every frame] = trialClock.getTime()*freq
      ori [set every repeat] = $ori
      startVal [time (s)] = 6
      sf [set every repeat] = $sf
      size [set every repeat] = $size
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    CodeComponent save_to_dm11
      Begin Experiment:
        from copy_dm11 import dm11_start, dm11_trial
        filename = dm11_start(data, expInfo, logging, thisExp, _thisDir, expName)
      Begin Routine:
        dm11_trial(filename, trials)
  Routine end
    ParallelOutComponent TrialTriger_2
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.01
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 1
    CodeComponent code_2
      Begin Experiment:
        TrialTriger_2.status=None
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Grating_custom.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'freq': 1, 'ori': 0, 'pos': [0, 0], 'sf': 0.03, 'size': [250, 250]},
      {'freq': 1, 'ori': 45, 'pos': [0, 0], 'sf': 0.03, 'size': [250, 250]},
      {'freq': 1, 'ori': 90, 'pos': [0, 0], 'sf': 0.03, 'size': [250, 250]},
      {'freq': 1, 'ori': 135, 'pos': [0, 0], 'sf': 0.03, 'size': [250, 250]},
      {'freq': 1, 'ori': 180, 'pos': [0, 0], 'sf': 0.03, 'size': [250, 250]},
      {'freq': 1, 'ori': 225, 'pos': [0, 0], 'sf': 0.03, 'size': [250, 250]},
      {'freq': 1, 'ori': 270, 'pos': [0, 0], 'sf': 0.03, 'size': [250, 250]},
      {'freq': 1, 'ori': 315, 'pos': [0, 0], 'sf': 0.03, 'size': [250, 250]},
      {'freq': 1, 'ori': 0, 'pos': [-3, -6], 'sf': 0.03, 'size': [30, 30]},
      {'freq': 1, 'ori': 45, 'pos': [-3, -6], 'sf': 0.03, 'size': [30, 30]},
      {'freq': 1, 'ori': 90, 'pos': [-3, -6], 'sf': 0.03, 'size': [30, 30]},
      {'freq': 1, 'ori': 135, 'pos': [-3, -6], 'sf': 0.03, 'size': [30, 30]},
      {'freq': 1, 'ori': 180, 'pos': [-3, -6], 'sf': 0.03, 'size': [30, 30]},
      {'freq': 1, 'ori': 225, 'pos': [-3, -6], 'sf': 0.03, 'size': [30, 30]},
      {'freq': 1, 'ori': 270, 'pos': [-3, -6], 'sf': 0.03, 'size': [30, 30]},
      {'freq': 1, 'ori': 315, 'pos': [-3, -6], 'sf': 0.03, 'size': [30, 30]}]
    Routine trial
  LoopTerminator trials
  Routine end
