PsychoPy2experiment version="1.85.1"
Settings
  Monitor = test2
  Experiment info = {u'participant': u'BMWR67', u'Run': u'Run1'}
  Units = use prefs
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  expName = MouseScrennCalib
  Screen = 2
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Routines
  Routine trial
    ParallelOutComponent TrialTrigger
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.01
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 255
    CodeComponent U3_Status
      Begin Experiment:
        # Adding status to labjack U3
        TrialTrigger.status=None
    CodeComponent texture
      Begin Experiment:
        tex1 = np.ones((8,8,3)) *-1
        tex1[:4, :4, 2] = 1
        tex1[4:, 4:, 2] = 1

        tex2 = np.ones((8,8,3)) *-1
        tex2[:4, 4:, 2] = 1
        tex2[4:, :4, 2] = 1
    PolygonComponent polygon
      fillColor [set every repeat] = $color
      stopVal [duration (s)] = 4
      interpolate = nearest
      lineColor [set every repeat] = $color
      startVal [time (s)] = 0.0
      size = (2, 2)
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    GratingComponent grating
      tex = $tex1
      stopVal [duration (s)] = 4
      interpolate = nearest
      units = pix
      texture resolution = 512
      startVal [time (s)] = 4
      sf = 0.125
      size = 2048
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    GratingComponent grating_2
      tex = $tex2
      stopVal [duration (s)] = 4
      interpolate = nearest
      units = pix
      texture resolution = 512
      startVal [time (s)] = 8
      sf = 0.125
      size = 2048
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    CodeComponent save_to_dm11
      Begin Experiment:
        import pickle
        import shutil
        base = u'V:\\users\\Aaron'
        date = data.getDateStr(format='%y%m%d')
        filename = '%s\\%s_%s\\%s\\vis' % (base, date,
        expInfo['participant'], expInfo['Run'])
        directory = os.path.dirname(filename)
        if not os.path.exists(directory):
            os.makedirs(directory)
        #os.chdir(directory)
        saved=False
        logging.filename = filename+'.log'
        thisExp.filename=filename
        src = _thisDir + '\\' + expName + '.psyexp'
        des = directory + '\\' + expName + '.psyexp'
        shutil.copy(src, des)
        print('copied %s to %s' % (src, des))
      Begin Routine:
        if not saved:
            pickle.dump(trials, open(filename+'.p','wb'))
            saved=True
            print('Saved to %s' % filename+'.p')
  Routine end
    ParallelOutComponent TrialTriger_2
      syncScreen = False
      stopData = 0
      stopVal [duration (s)] = 0.01
      address = LabJack U3
      startVal [time (s)] = 0.0
      startData = 1
    CodeComponent code_2
      Begin Experiment:
        TrialTriger_2.status=None
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = MouseCalib.xlsx
    loopType = sequential
    nReps = 20
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    conditions:
      [{'color': [-1, -1, -0.2]},
      {'color': [-1, -1, -0.1]},
      {'color': [-1, -1, -0.05]},
      {'color': [-1, -1, 0]},
      {'color': [-1, -1, 0.05]},
      {'color': [-1, -1, 0.1]},
      {'color': [-1, -1, 0.2]}]
    Routine trial
  LoopTerminator trials
